CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "stardist")
    Name to assign these images:Prob_map
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C0")
    Name to assign these images:C0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C1")
    Name to assign these images:C1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C2")
    Name to assign these images:C2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C3")
    Name to assign these images:C3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C4")
    Name to assign these images:C4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:["This pipeline was originally develped by Todd Fallesen in Lea et al 2017 Development'", 'https://github.com/todd-fallesen/Niakan_Lab_KLF17', 'This pipeline was modified by Claire Simon and accompanies the manuscript Simon et al., (2025)                                                        Repository available on:', 'https://ctr.uniofcam.dev/ctr-bioinformatics/niakan-lab/simon-et-al-2025']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
    Select the input image:Prob_map
    Name the output object:ConvertImageToObjects
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:ConvertImageToObjects
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:Yes

FilterObjects:[module_num:7|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
    Select the objects to filter:ShrunkenNuclei
    Name the output objects:Objects_frame_edge_filtered
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Objects_frame_edge_filtered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['The area value is in square pixels.  Changed this to 175 to avoid capturing top and bottom of cells which causes them to fuse. Added upper limit 2500']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
    Select the objects to filter:Objects_frame_edge_filtered
    Name the output objects:Objects_edge_size_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:175
    Filter using a maximum measurement value?:Yes
    Maximum value:2500

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Objects_frame_edge_filtered
    Name the objects to be identified:Nuc_expand
    Select the method to identify the secondary objects:Distance - N
    Select the input image:C2
    Number of pixels by which to expand the primary objects:4
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
ExpandOrShrinkObjects:[module_num:11|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notes:['Expand the nucleus shape to measure cytoplasmic intensity']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
    Select the input objects:Nuc_expand
    Name the output objects:Nuc_cytoring
    Select the operation:Add partial dividing lines between objects
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
IdentifyTertiaryObjects:[module_num:12|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notes:['Subtract nucleus to make doughnut ring of cytoplasm']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
    Select the larger identified objects:Nuc_cytoring
    Select the smaller identified objects:Objects_frame_edge_filtered
    Name the tertiary objects to be identified:Cytoring
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Cytoring
    Name the output image:Cytoring
    Select the color format:Binary (black & white)
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
TrackObjects:[module_num:14|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notes:['Distance performs a lot better than overlap.']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
    Choose a tracking method:Distance
    Select the objects to track:Objects_edge_size_filtered
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    Maximum pixel distance to consider matches:1
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:3
    Filter using a maximum lifetime?:Yes
    Maximum lifetime:25
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:C0, C1, C2, C3, C4
    Select objects to measure:Cytoring, Objects_edge_size_filtered

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cytoring, Objects_edge_size_filtered
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayObjects:[module_num:17|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
    Input:C0
    Name the output image:Tracked_Objects_on_C0
    Objects:Objects_edge_size_filtered
    Opacity:0.3

OverlayObjects:[module_num:18|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
    Input:TrackedCells
    Name the output image:TrackedCells_OverlayObjects
    Objects:Objects_edge_size_filtered
    Opacity:0.3

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Tracked_Objects_on_C0
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_objects_on_C0_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|C0_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Tracked_cells_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|TrackedCells
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells_OverlayObjects
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:trackedCells_Overlay
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|TrackedCells_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:Cytoring
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Cytoring
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Cytoring
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Objects_edge_size_filtered|Intensity_MeanIntensity_C3,Objects_edge_size_filtered|Intensity_MeanIntensity_C2,Objects_edge_size_filtered|Intensity_MeanIntensity_C4,Objects_edge_size_filtered|Intensity_MeanIntensity_C1,Objects_edge_size_filtered|Intensity_MeanIntensity_C0,Objects_edge_size_filtered|Intensity_MedianIntensity_C4,Objects_edge_size_filtered|Intensity_MedianIntensity_C1,Objects_edge_size_filtered|Intensity_MedianIntensity_C0,Objects_edge_size_filtered|Intensity_MedianIntensity_C3,Objects_edge_size_filtered|Intensity_MedianIntensity_C2,Objects_edge_size_filtered|AreaShape_Center_X,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Stardist_test
    Overwrite existing files without warning?:No
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